CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "labels") (file does contain ".tif")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<DataFolder>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<FileName>.*)_C0.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_C0")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C1")
    Name to assign these images:PLA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:PLA
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:PLA
    Name the output image:FilteredPLA
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:FilteredPLA
    Name the primary objects to be identified:PLA_dots
    Typical diameter of objects, in pixel units (Min,Max):2,8
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.035
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
RelateObjects:[module_num:9|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
    Parent objects:Cells
    Child objects:PLA_dots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabels
    Select the color format:uint16
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabels
    Select method for constructing file names:Single name
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    Enter single file name:\g<FileName>_nuclei_labels
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    Saved file format:tiff
    Output file location:Elsewhere...|\g<DataFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Cells
    Name the output image:CellLabels
    Select the color format:uint16
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CellLabels
    Select method for constructing file names:Single name
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    Enter single file name:\g<FileName>_cells_labels
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    Saved file format:tiff
    Output file location:Elsewhere...|\g<DataFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:PLA_dots
    Name the output image:PLALabels
    Select the color format:uint16
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:PLALabels
    Select method for constructing file names:Single name
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    Enter single file name:\g<FileName>_PLA_labels
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    Saved file format:tiff
    Output file location:Elsewhere...|\g<DataFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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notes:['Export cell based measurements from all Wells into one table.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<DataFolder>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Children_PLA_dots_Count,Cells|AreaShape_Area,Cells|AreaShape_Center_X,Cells|AreaShape_Center_Y,Cells|Location_Center_Y,Cells|Location_Center_X,Image|FileName_PLALabels,Image|FileName_PLA,Image|FileName_CellLabels,Image|FileName_NucleiLabels,Image|FileName_DNA,Image|PathName_NucleiLabels,Image|PathName_PLALabels,Image|PathName_DNA,Image|PathName_PLA,Image|PathName_CellLabels
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:All_Wells_cells.txt
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:18|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notes:['Export cell and nuclei measurements, one table per input well.', '']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<DataFolder>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|AreaShape_Area,Cells|AreaShape_Center_Y,Cells|AreaShape_Center_X,Cells|Location_Center_Y,Cells|Location_Center_X,Cells|Children_PLA_dots_Count,Image|PathName_DNA,Image|PathName_PLA,Image|PathName_NucleiLabels,Image|PathName_CellLabels,Image|PathName_PLALabels,Image|FileName_PLA,Image|FileName_DNA,Image|FileName_CellLabels,Image|FileName_PLALabels,Image|FileName_NucleiLabels,Nuclei|AreaShape_BoundingBoxMaximum_X,Nuclei|AreaShape_BoundingBoxMaximum_Y,Nuclei|AreaShape_BoundingBoxMinimum_X,Nuclei|AreaShape_BoundingBoxMinimum_Y,Nuclei|AreaShape_EquivalentDiameter,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:\g<FileName>_cells.txt
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:\g<FileName>_nuclei.txt
    Use the object name for the file name?:No
